CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<PlateID>TD54_HepG2_FUCCI_tracking_384 well plate 1)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:c[0-9]{1}t(?P<tp>[0-9]{2})xy(?P<imageNr>[0-9]{3}).tif
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|D:\\40x images\\TD54_HepG2_FUCCI_tracking_384 well plate 1
    Match file and image metadata:[{'CSV Metadata': 'loc', 'Image Metadata': 'imageNr'}]
    Use case insensitive matching?:No
    Metadata file name:metadata 40x images.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1") (file doesnot contain "kleur")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2") (file doesnot contain "kleur")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3") (file doesnot contain "kleur")
    Name to assign these images:Cy3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4") (file doesnot contain "kleur")
    Name to assign these images:dTomato
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "kleur")
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    Name to assign these objects:Nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:well_name_p

MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:6|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
    Select images to measure:Cy3, GFP, Hoechst, dTomato
    Select objects to measure:Nuclei

TrackObjects:[module_num:7|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
    Choose a tracking method:Overlap
    Select the objects to track:Nuclei
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    Maximum pixel distance to consider matches:40
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells_DMEM
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    Filter objects by lifetime?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells_DMEM
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\40x images\\TD54_HepG2_FUCCI_tracking_384 well plate 1\\TrackedCells_Nuclei_DMEM_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:9|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:TableDMEM
    Output file location:Elsewhere...|D:\\40x images\\TD54_HepG2_FUCCI_tracking_384 well plate 1\\Database
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:TD54_HepG2_FUCCI_tracking_384 well plate 1_DMEM.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:TD54_HepG2_FUCCI_tracking_384 well plate 1_DMEM
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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